<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.9.0">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000037552_redo_RC9_01_3868.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000038384_RC10_01_3869.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000026417_RC11_01_3870.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000030377_RC12_01_3871.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000030122_RD1_01_3873.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000036867_RD2_01_3874.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000028961_RD3_01_3875.mzML</file>
            <file>E:\Nina\ConvertedData\20231126_AGP_download\000032693_RD4_01_3876.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="true">
            <parameter name="MS1 detector (Advanced)" selected="true" selected_item="Centroid">
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                <module name="Centroid">
                    <parameter name="Noise level">1000.0</parameter>
                    <parameter name="Detect isotope signals below noise level" selected="false">
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                    </parameter>
                </module>
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            </parameter>
            <parameter name="MS2 detector (Advanced)" selected="true" selected_item="Centroid">
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                <module name="Centroid">
                    <parameter name="Noise level">50.0</parameter>
                    <parameter name="Detect isotope signals below noise level" selected="false">
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                    </parameter>
                </module>
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            </parameter>
            <parameter name="Denormalize fragment scans (traps)">false</parameter>
        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scan filters" selected="true">
            <parameter name="Scan number"/>
            <parameter name="Base Filtering Integer"/>
            <parameter name="Retention time">
                <min>0.0</min>
                <max>11.5</max>
            </parameter>
            <parameter name="Mobility"/>
            <parameter name="MS level filter" selected="MS1, level = 1">1</parameter>
            <parameter name="Scan definition"/>
            <parameter name="Polarity">Any</parameter>
            <parameter name="Spectrum type">ANY</parameter>
        </parameter>
        <parameter name="Minimum consecutive scans">5</parameter>
        <parameter name="Minimum intensity for consecutive scans">1000.0</parameter>
        <parameter name="Minimum absolute height">3000.0</parameter>
        <parameter name="m/z tolerance (scan-to-scan)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>20.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.1</parameter>
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">2</parameter>
            <parameter name="Limit by ion mobility edges">false</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.9</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.1</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">3000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.0</min>
            <max>2.0</max>
        </parameter>
        <parameter name="Minimum scans (data points)">4</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance (intra-sample)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.08</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance (feature-to-scan)">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance (sample-to-sample)">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.3</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">peak</parameter>
        <parameter name="Minimum aligned features (samples)" selected="true">
            <abs>2</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="true">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>5.0</ppmtolerance>
            </parameter>
            <parameter name="Max charge">1</parameter>
            <parameter name="Estimate minimum carbon">true</parameter>
            <parameter name="Remove if 13C">true</parameter>
            <parameter name="Exclude isotopes">O,O</parameter>
        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>8.0E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.07</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>/home/nina/20240314_AGP_no_gap_fill.mgf</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="true">
            <parameter name="Select spectra to merge">across samples</parameter>
            <parameter name="m/z merge mode">weighted average (remove outliers)</parameter>
            <parameter name="intensity merge mode">sum intensities</parameter>
            <parameter name="Expected mass deviation">
                <absolutetolerance>0.005</absolutetolerance>
                <ppmtolerance>30.0</ppmtolerance>
            </parameter>
            <parameter name="Cosine threshold (%)">0.0</parameter>
            <parameter name="Signal count threshold (%)">0.0</parameter>
            <parameter name="Isolation window offset (m/z)">0.0</parameter>
            <parameter name="Isolation window width (m/z)">1.5</parameter>
        </parameter>
        <parameter name="Filter rows">ONLY WITH MS2</parameter>
        <parameter name="Feature intensity">Area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
</batch>
