<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">500.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">500_0</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">500_0</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="ALL_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">500_0</parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">1500.0</parameter>
        <parameter name="Min highest intensity">1500.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.02</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.peakpicking.deconvolution.DeconvolutionModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Suffix">deconvoluted</parameter>
        <parameter name="Algorithm" selected="Baseline cut-off">
            <module name="Baseline cut-off">
                <parameter name="Min peak height">1500.0</parameter>
                <parameter name="Peak duration range (min)">
                    <min>0.01</min>
                    <max>3.0</max>
                </parameter>
                <parameter name="Baseline level">500.0</parameter>
            </module>
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        </parameter>
        <parameter measure="MEDIAN" name="m/z center calculation" weighting="NONE">CenterFunction</parameter>
        <parameter name="m/z range for MS2 scan pairing (Da)" selected="true">0.025</parameter>
        <parameter name="RT range for MS2 scan pairing (min)" selected="true">0.2</parameter>
        <parameter name="Remove original feature list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.isotopes.deisotoper.IsotopeGrouperModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">deisotoped</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" type="absolute">0.2</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">4</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.alignment.join.JoinAlignerModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">75.0</parameter>
        <parameter name="Retention time tolerance" type="absolute">0.2</parameter>
        <parameter name="Weight for RT">25.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.rowsfilter.RowsFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Minimum peaks in a row" selected="true">2.0</parameter>
        <parameter name="Minimum peaks in an isotope pattern" selected="true">2</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="Peak duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false"/>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Keep only peaks with MS2 scan (GNPS)">false</parameter>
        <parameter name="Reset the peak number ID">false</parameter>
        <parameter name="Remove source feature list after filtering">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.duplicatefilter.DuplicateFilterModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Name suffix">filtered</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" type="absolute">0.2</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Remove original peaklist">false</parameter>
    </batchstep>
</batch>
